// --------------------------------------------------------------------- 
// Shepherd Laboratory multicolor DMD SIM control script for MicroManager 2.0 GAMMA
// --------------------------------------------------------------------- 
//
// This script takes the settings from the MDA window and uses the triggerscope
// for running multidimensional acquisition. The only supported order is xy-position/time/z-position/channel/SIM pattern,
// from slowest axis to fastest axis.
//
// Inspired by triggerscopeStreamV204.bsh and Shepherd Laboratory LED-SIM control script v0.3
// ------------------------------------------------------------------------------

// access micromanager core with mmc
// access GUI with mm
// access acquisition engine with acq
import org.micromanager.data.Coords;
import org.micromanager.data.Datastore;
import org.micromanager.data.Image;
import org.micromanager.data.Metadata;
import org.micromanager.data.Metadata.MetadataBuilder;
import org.micromanager.data.SummaryMetadata;
import org.micromanager.data.SummaryMetadataBuilder;
import org.micromanager.PropertyMap;
import org.micromanager.PropertyMap.PropertyMapBuilder ;
import org.micromanager.display.DisplayWindow;
import org.micromanager.MultiStagePosition;
import org.micromanager.SequenceSettings;
import org.micromanager.acquisition;
import org.micromanager.api.AcquisitionOptions;
import mmcorej.TaggedImage;

import java.text.SimpleDateFormat;
import java.util.concurrent.TimeUnit;
import java.util.regex.Matcher;
import java.util.regex.Pattern;
import java.lang.System;
import java.lang.Math;


print("\r");
print("####################################");
print("Starting SIM sequence");
print("####################################");

/*****************************
User settings
*****************************/
// DMD settings
String dmd_script_path = "C:\\Users\\shepherd lab\\Documents\\mcsim_private\\mcSIM\\expt_ctrl\\set_dmd_sim.py"; // python file to control DMD
String conda_env_name = "mcsim"; // conda environment used to run dmd_script_path
boolean program_dmd = true; // if true, program DMD using parameters set here
String dmd_mode = "sim"; // set DMD mode "sim", "widefield", or "affine"
boolean dark_patterns_between = true; // if running in normal SIM mode, add dark pattern in between SIM patterns to blank laser
int n_dark_frames = 2; // number of dark frames added as extra SIM patterns to allow mirror enough time to move
int n_sim_patterns = 9; // number of real SIM patterns
int n_patterns = n_sim_patterns + n_dark_frames; // typically 11 = 2 dark to allow mirror to move + 9 real patterns

// display and saving settings
boolean debug = false;
boolean display = false;
boolean individual_tifs = false;

// camera settings
boolean cam_using_int_trigger = true;

// triggerscope settings
boolean program_tscope = true; // false if already programmed and want to run same program again // todo: not implemented
boolean print_program = false;
int dmd_trig1_ttl = 7; // rising edge advances to next pattern
int dmd_trig2_ttl = 6; // HIGH to allow patterns to advance, or LOW to disallow
int shutter = 8;
int tscope_trig_mode = 4;  // set to rising trigger, 0=Low, 1=High (causes error), 2=Rising, 3=Falling 4=Change
int tscope_channel_fastest_axis = 1; // 0=z-stack fastest axis, then channel; 1=channel fastest axis, then z-stack. With channels alternating ON/OFF cannot do z-stack as fastest axis.

// MM settings
int circ_buffer_mb = 1000;

/*****************************
Define useful functions
*****************************/

/**
 * function to send serial data to triggerscope
 *
 * @param  inData		string to write to triggerscope
 * @param  print_answer	boolean flag, whether or not to print the answer received from the triggerscope	
 */
boolean tgsWrite(String inData, boolean print_command, boolean print_answer, int n_readlines) {
	if(print_command){print("sending: " + inData);}
	
	mmc.setSerialPortCommand(tscope_serial_port, inData, "\n");
	String tgAnswer = " ";
	
	// todo: would love to simply read until nothing left to read...
	// maybe try readFromSerialPort(java.lang.String portLabel)
	for (int ii=0; ii<n_readlines; ii++){
		Thread.sleep(5);
		tgAnswer = mmc.getSerialPortAnswer(tscope_serial_port, "\n");
		if(print_answer){print("response: " + tgAnswer);}
	}

	
	return true;	
}

/**
 * Print triggerscope ADC and TTL buffers
 *
 * @param  ttlArray	a boolean array of size 16 x nlines
 * @param  dacArray	an integer array of size 16 x nlines
 * @param  nlines	
 */
boolean printBuffers(int [][] ttlArray, int [][] dacArray, int nlines) {
	String tout = "";
	String dout = "";
	if(true) { 
		print("TTL Configuration....");
		for(int d = 0;d < nlines;d++) { //print all program lines
			for(int t = 0;t < 16;++t) { //print all 16 outputs
				tout = tout + ttlArray[d][t] + ","; 
			}	
			print("Program Line" + d +" = " + tout);
			tout = ""; 
		}
		
		print("DAC Configuration....");
		for(int d = 0;d < nlines;d++) { //print all program lines
			for(int t = 0;t < 16;++t) { //print all 16 outputs
				dout = dout + dacArray[d][t] + ","; 
			}	
			print("Program Line" + d +" = " + dout);
			dout = ""; 
		}
	}
	
	return true;
}

/**
 * Grab channel data from the MDA window corresponding to the triggerscope lines, and store this information in dacArrayChannel and ttlArrayChannel. 
 * @param acqSettings
 * @param  dacArrayChannel	a boolean array of size nchannels x 16
 * @param  ttlArrayChannel	an integer array of size nchannels x 16
 * @param  nchannels	
 * @param  dac_bit_depth	bit depth of digital-to-analog converter
 * @param dac_min_voltage	DAC voltage corresponding to 0 counts
 * @param dac_voltage_range DAC voltage range spanned from 0 counts to 2**dac_bit_depth counts - 1
 * @param  debug			boolean flag, if true print debugging information
 */
boolean get_tscope_channel_settings(acqSettings, int [][] dacArrayChannel, int [][] ttlArrayChannel, int nchannels, int dac_bit_depth, double dac_min_voltage, double dac_voltage_range, boolean debug){
	
	// get active group set in MDA
	String activeGroup = acqSettings.channelGroup;

	// loop over channels in active group and accumulate TTL/DAC values
	int i_channel = 0;
	for (channel : acqSettings.channels) {
		if(channel.useChannel){
			// get preset data preset
			String preset_name = channel.config; 
			mmcorej.Configuration preset = mmc.getConfigData(activeGroup, preset_name);
		
			int [] dacArray_preset = new int[] {0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0};
			int [] ttlArray_preset = new int[] {0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0, 0};
			get_tscope_preset_setting(preset, dacArray_preset, ttlArray_preset, dac_bit_depth, dac_min_voltage, dac_voltage_range, debug);
		
			// assign preset info to program line
			for(int ii=0; ii<16; ii++){
				dacArrayChannel[i_channel][ii] = dacArray_preset[ii];
				ttlArrayChannel[i_channel][ii] = ttlArray_preset[ii];
			}

			if(debug){
				print("#####################################################");
				print("active group: '" + activeGroup + "' with preset '" + preset_name + "'");
			}

			i_channel++;
		}
	}
	
	
	if(debug){
		print("tscope channel settings:");
		printBuffers(ttlArrayChannel, dacArrayChannel, i_channel);
	}
	
	return true;
}


/**
 * Grab triggerscope settings from a single preset. Utility function to help get_tscope_channel_settings
 *
 * @param  dacArray				a boolean array of size 16
 * @param  ttlArray				an integer array of size 16
 * @param  dac_bit_depth		bit depth of digital-to-analog converter
 * @param  dac_min_voltage		minimum dac voltage, corresponding to 0 counts
 * @param  dac_voltage_range	DAC voltage range spanned from 0 counts to 2**dac_bit_depth counts - 1
 * @param  debug				boolean flag, if true print debugging information
 */
boolean get_tscope_preset_setting(mmcorej.Configuration preset, int [] dacArray, int [] ttlArray, int dac_bit_depth, double dac_min_voltage, double dac_voltage_range, boolean debug) {
	
	// loop over device settings in preset
	for (int k=0; k<preset.size(); k++){
		
		// get each device, property, value combination for preset
		mmcorej.PropertySetting setting = preset.getSetting(k);
		String device = setting.getDeviceLabel();
		String prop_name = setting.getPropertyName();
		String prop_val = setting.getPropertyValue();
		
		//only list triggerscope settings
		if((device.contains("TriggerScope"))) { 
			
			if(debug) { print("device '" + device + "' with property  '" + prop_name + "' and value '" + prop_val + "'"); }
				
			//Handle DAC lines
			if (device.contains("DAC") && prop_name.contains("Volts")) { 
					
				//pull DAC number
				int dn = Integer.parseInt(device.replaceAll("\\D+","" ));
				
				//pull DAC value from triggerscope driver settings -- these are in units 0-10
				double dac_mm_setting = (double) Float.parseFloat(prop_val.replaceAll("\\.D","" ));
				// convert from triggerscope driver units to volts
				double volts = map_intervals(dac_mm_setting, 0., 10., dac_min_voltage, dac_voltage_range); 
				// convert from volts to DAC counts
				dacArray[dn-1] = voltage2dac(dac_bit_depth, volts, dac_min_voltage, dac_voltage_range);
				
				if(debug) {print("DAC number " + dn + " = " + dacArray[dn-1]);}
				//dacArrayChannel[i_channel][dn-1]);}
			}
			
			// Handle TTL lines
			if (device.contains("TTL")){
				// get ttl number
				str = device.replaceAll("\\D+","" ); //pull TTL number
				int ttl_num = Integer.parseInt(str);
				
				// get ttl value
				int ttl_val = 0;
				
				// two possible proprties for TTL, 'Label' and 'State'
				if(prop_name.contains("Label")){ 
					 //todo: compile expression to make case insensitive in clearer way
					 //todo: is there a better way to detect these names? They can be changed in the HW configuration manager, so can't be relied on
					if(prop_val.matches("[Oo][Pp][Ee][Nn]") || prop_val.matches("[Oo][Nn]") || prop_val.matches("[Hh][Ii][Gg][Hh]")) {ttl_val = 1;}
				}
				
				// if using TTl property "State"
				if(prop_name.contains("State")){
					ttl_val = Integer.parseInt(prop_val);
				}
				
				ttlArray[ttl_num-1] = ttl_val;
				
				if(debug) {print("TTL "+ ttl_num + " = " + ttlArray[ttl_num-1]);}
			}
		}
	}
	
	return true;
}

/**
 * Calculate DAC value from voltage
 *
 * @param  dac_bit_depth 	bit depth of the DAC. i.e. the DAC can represent 2^dac_bit_depth different values
 * @param  voltage			voltage to be converted to DAC value
 * @param  dac_min_voltage	minimum voltage the DAC can output, corresponding to 0 counts
 * @param  dac_max_voltage	maximum voltage the DAC can output, corresponding to 2^(dac_bit_depth-1) counts
 */
int voltage2dac(int dac_bit_depth, double voltage, double dac_min_voltage, double dac_voltage_range){
	// round returns long
	int dac_val = (int) Math.round(map_intervals(voltage, dac_min_voltage, dac_voltage_range, 0, (double)(Math.pow(2, dac_bit_depth) - 1)));
	return dac_val;
}

/**
 * Calculate voltage from DAC value
 *
 * @param  dac_bit_depth 	bit depth of the DAC. i.e. the DAC can represent 2^dac_bit_depth different values
 * @param  dac_val			DAC value to be converted to voltage
 * @param  dac_min_voltage	minimum voltage the DAC can output, corresponding to 0 counts
 * @param  dac_max_voltage	maximum voltage the DAC can output, corresponding to 2^(dac_bit_depth-1) counts
 */
double dac2voltage(int dac_bit_depth, int dac_val, double dac_min_voltage, double dac_max_voltage){
	double voltage = map_intervals((double) dac_val, 0, (double) (Math.pow(2, dac_bit_depth) - 1), dac_min_voltage, dac_max_voltage - dac_min_voltage);
	return voltage;
}

/**
 * Map the double val contained in the range [start, start + range] to the corresponding value in the
 * range [new_start, new_start + new_range]
 *
 * @param  val 			value to be mapped
 * @param  start		start of first interval
 * @param  range		size of first interval, can be negative
 * @param  new_start	start of second interval
 * @param  new_range	size of second interval, can be negative
 */
double map_intervals(double val, double start, double range, double new_start, double new_range){
	new_val = (val - start) / range * new_range + new_start;
	return new_val;
}

/*****************************
stop any running acquisition
*****************************/
mm.live().setLiveMode(false);

/*****************************
set circular buffer size
*****************************/
mmc.setCircularBufferMemoryFootprint(circ_buffer_mb);
 
/*****************************
Pull acquisition settings from MDA window
*****************************/
// org.micromanager.acquisition.SequenceSettings?
acqSettings = mm.getAcquisitionManager().getAcquisitionSettings();

// Pull number of time repeats from MDA window
int n_times = acqSettings.numFrames;
if (n_times == 0){n_times = 1;}

exposureMs = mmc.getExposure();
intervalMs = acqSettings.intervalMs();

boolean interval_time_lapse_flag = (intervalMs > 0);

//Pull (XY) position list from MDA window
positionList = mm.positions().getPositionList();
int nxy_pos = positionList.getNumberOfPositions();

boolean ignore_xy_loop = false;
if ((!acqSettings.usePositionList) || (nxy_pos == 0) || (nxy_pos == 1) || (positionList == null)) {
	nxy_pos = 1;
	ignore_xy_loop = true;
}

//Pull Z position list from MDA window
int nz_pos = acqSettings.slices.size();
if (nz_pos == 0){nz_pos = 1;}

// pull active channel list from MDA window
String activeGroup = acqSettings.channelGroup;

// loop over active channels in active group and accumulate names/number
int nchannels = 0;
StringBuilder sb = new StringBuilder("");
for (channel : acqSettings.channels) {
	//only include channel if "use" box is checked
	if(channel.useChannel){
		nchannels += 1;
		
		// get preset data preset
		String cf = channel.config;
		sb.append(cf);
		String sp = " ";
		sb.append(sp);
	}
}

String active_channels = sb.toString();

// number of time/positions/channels points etc. looped over during acquisition
int niterations = n_patterns * nchannels * nz_pos * nxy_pos * n_times;
print(String.format("%d times; %d xy-pos; %d z-pos, %d channels = %s, %d patterns; %d total iterations", new Object [] {n_times, nxy_pos, nz_pos, nchannels, active_channels, n_patterns, niterations}));

/*****************************
Prepare datastore
*****************************/
rootDir = acqSettings.root;
prefixDir = acqSettings.prefix;
savePath = mm.data().getUniqueSaveDirectory(rootDir + "/" + prefixDir); //todo: combine paths in os independent way?
print("Saving data in: " + savePath);

//Datastore store = mm.data().createRAMDatastore();
//store.setSavePath(savePath);

org.micromanager.data.internal.DefaultDatastore store;
if (individual_tifs) {store = mm.data().createSinglePlaneTIFFSeriesDatastore(savePath);}
else {store = mm.data().createMultipageTIFFDatastore(savePath, true, false);}
// let MM manage our data store
mm.displays().manage(store);

/*****************************
Build metadata
*****************************/
// keep whatever metadata MM stores by default
SummaryMetadata.SummaryMetadataBuilder summary_mdb = store.getSummaryMetadata().copy();

// intended dimensions
Coords.CoordsBuilder intended_dm_cb = mm.data().getCoordsBuilder().z(nz_pos).stagePosition(nxy_pos).time(n_times).channel(nchannels);

// axis order
String [] aorder = {"position", "time", "z", "channel"};

// current date/time
SimpleDateFormat simpleDateFormat = new SimpleDateFormat("yyyy-dd-MM;HH:mm:ss.SSS");
String date = simpleDateFormat.format(new Date());

// store number of sim images and other DMD information in custom user data 
PropertyMapBuilder pmb = mm.data().getPropertyMapBuilder().putInt("NumSIMPatterns", n_patterns).putInt("NumDarkFrames", n_dark_frames).putBoolean("DMDBlanksBetweenFrames", dark_patterns_between).putString("DMDPatternMode", dmd_mode);
PropertyMap pm = pmb.build();

// create new metadata
SummaryMetadata summary_md = summary_mdb.startDate(date).axisOrder(aorder).intendedDimensions(intended_dm_cb.build()).userData(pm).build();
store.setSummaryMetadata(summary_md);

//Create Coordinates builder object
//Coords.CoordsBuilder builder = mm.data().getCoordsBuilder();

/*****************************
Set display properties
*****************************/
if (display) { //Create a display for the datastore. todo: think this still deosn't work
	DisplayWindow display = mm.displays().createDisplay(store);
}

/*****************************
Get devices --- camera, xy-stage, z-stage, triggerscope
*****************************/
camera = mmc.getCameraDevice();

//Initialize XYZ stages
xyStage = mmc.getXYStageDevice();

// focus device is one of the triggerscope lines
String focus_dev = mmc.getFocusDevice();

// z-stage not set as focus device because triggerscope is, so hard-code name
String zStage = "MCL NanoDrive Z Stage";

// triggerscope
String tscope_hub = "TriggerScope-Hub";
String tscope_focus = "TriggerScope-Focus";

String tscope_serial_port = mmc.getProperty(tscope_hub, "COM Port");
int focus_dac_index = Integer.parseInt(mmc.getProperty(tscope_focus, "DAC Number")) - 1;

/*****************************
Program DMD pattern sequence
*****************************/
// ensure that shutter is closed before we start
mmc.setProperty(String.format("TriggerScope-TTL%02d", new Object[] {shutter}), "State", 0);
mmc.sleep(50);

// if the DMD enable TTL trigger line (trigger #2) is not LOW during programming, triggering will not succeed
mmc.setProperty(String.format("TriggerScope-TTL%02d", new Object[] {dmd_trig1_ttl}), "State", 0);
mmc.setProperty(String.format("TriggerScope-TTL%02d", new Object[] {dmd_trig2_ttl}), "State", 0);

// Program DMD by calling python script
if(program_dmd){
	print("setting DMD sequence from patterns stored in firmware");
	
	String dmd_cmd = "";

	if(dark_patterns_between){
			//p = r.exec("cmd /c conda activate " + conda_env_name + " & python " + "\"" + dmd_script_path +  "\"" + " " + active_channels + " --triggered" + " -d " + n_dark_frames + " --blank" + " -m " + dmd_mode + " -wr " + n_sim_patterns);
			dmd_cmd = "cmd /c conda activate " + conda_env_name + " & python " + "\"" +  dmd_script_path +  "\"" + " " + active_channels + " --triggered" + " -d " + n_dark_frames + " --blank" + " -m " + dmd_mode + " -wr " + n_sim_patterns;
	}
	else {
			//p = r.exec("cmd /c conda activate " + conda_env_name + " & python " + "\"" + dmd_script_path +  "\""  + " " + active_channels + " --triggered" + " -d " + n_dark_frames + " -m " + dmd_mode + " -wr " + n_sim_patterns);
			dmd_cmd = "cmd /c conda activate " + conda_env_name + " & python " + "\"" + dmd_script_path +  "\""  + " " + active_channels + " --triggered" + " -d " + n_dark_frames + " -m " + dmd_mode + " -wr " + n_sim_patterns;
	}
	
	print(dmd_cmd);
	Runtime r = Runtime.getRuntime();
	Process p = r.exec(dmd_cmd);
	
	BufferedReader stdInput = new BufferedReader(new InputStreamReader(p.getInputStream()));
	BufferedReader stdError = new BufferedReader(new InputStreamReader(p.getErrorStream()));
	
	// print output from program
	while ((s=stdInput.readLine()) != null){print(s);}
	
	// print errors from program
	while ((s=stdError.readLine()) != null){print(s);}
}

/*****************************
Get initial triggerscope settings so we can put everything back at the end
*****************************/
double z_initial_tscope = mmc.getPosition(focus_dev);
//double z_initial_tscope = (double) Float.parseFloat(mmc.getProperty(focus_dev, "Position"));

// get initial triggerscope settings so we can reset them at the end
double [] dac_start = new double[16];
int [] ttl_start = new int[16];

for (int ii=0; ii<16; ii++){
	if( ii != focus_dac_index){
		dac_start[ii] = (double) Float.parseFloat(mmc.getProperty(String.format("TriggerScope-DAC%02d", new Object[] {ii+1}), "Volts")); // string formatting needs object
	};
	ttl_start[ii] = Integer.parseInt(mmc.getProperty(String.format("TriggerScope-TTL%02d", new Object[] {ii+1}), "State"));
}

/*****************************
Set triggerscope general settings
*****************************/
String answer = ""; //a reply buffer
String tout = "";

//if (program_tscope) {	// start of program tscope loop, but have problems because any variables defined in here go out of scope...
// clear previous triggerscope settings
if(!tgsWrite("CLEAR_ALL", true, true, 2)){print("Transmit Error...)"); }

// set ignore trigger mode
int camera_extra_triggers = 1; // number of extra trigger edges the camera throws at the end of burst acquisition. This can change depending on exposure time
int ignore_last_channel_focus_trigger_num = 0;
// only need to ignore triggers if doing finite time lapse
// there are 2 triggers for each camera pulse (because triggering on rising and falling)
// and we want to use one of the extra triggers to turn off the laser
if (interval_time_lapse_flag){ignore_last_channel_focus_trigger_num = 2 * camera_extra_triggers - 1;}

if(!tgsWrite("NUM_IGNORE_FINAL_CHANNEL_FOCUS_LOOP_TRIGGERS," + ignore_last_channel_focus_trigger_num, true, true, 1)){print("Transmit Error...)");}

// set triggerscope timeout in ms-- this should only matter if doing timelapse
int timeout = 10000;
if (interval_time_lapse_flag){timeout = (int) intervalMs + 1000;}
if(!tgsWrite("TIMEOUT," + timeout, true, true, 1)){print("Transmit Error...)");}

// configure triggering
if(!tgsWrite("TRIGMODE," + tscope_trig_mode, true, true, 1)){print("Transmit Error...)");}

// tell triggerscopes how many time loops
int n_tscope_loops = n_times;
if(!tgsWrite("TIMECYCLES," + n_tscope_loops, true, true, 1)){print("Transmit Error...)");}

// todo: next two commands don't do anything right now, need to modify triggerscope firmware
// set length of SIM sequence (i.e. number of program steps per pattern)
if(!tgsWrite("SET_SIM_SEQ_LEN," + 2, true, true, 1)){print("Transmit Error...)");}

// set number of patterns
if(!tgsWrite("SET_NUM_SIM_PATTERNS," + 8, true, true, 1)){print("Transmit Error...)");}

/*****************************
Build DAC/TTL lines which will be programmed to triggerscope
*****************************/
//first get lines for looping over channels
int [][] dacArrayChannel = new int[nchannels] [16]; //an array to hold values for the DAC channel
int [][] ttlArrayChannel = new int[nchannels] [16]; //an array to hold values for the TTL channel
get_tscope_channel_settings(acqSettings, dacArrayChannel, ttlArrayChannel, nchannels, 16, -10., 20., debug);

// but when we write these to the triggerscope, we will write each channel line multiple times to account for the SIM patterns. Alternate channel values with OFF values
n_tscope_steps = n_patterns * nchannels * 2; // all channel values paired with OFFs
if (interval_time_lapse_flag){ // if running with large interval between frames, add extra line to turn off lasersttlArray[counter][ii] = 1;
	n_tscope_steps += 1;	
}
int [][] dacArray = new int[n_tscope_steps] [16]; //an array to hold values for the DAC channel
int [][] ttlArray = new int[n_tscope_steps] [16]; //an array to hold values for the TTL channel

int counter = 0;
for (int ic=0; ic < nchannels; ic++){
	for (int isim=0; isim < n_patterns; isim++){
		for (int ii=0; ii < 16; ii++){
			// write channel data
			ttlArray[counter][ii] = ttlArrayChannel[ic][ii];
			dacArray[counter][ii] = dacArrayChannel[ic][ii];
			
			// write OFF data
			ttlArray[counter+1][ii] = ttlArrayChannel[ic][ii];
			// as a test
			ttlArray[counter+1][8] = 0;

			// if we aren't inserting dark patterns in between bright patterns, turn off DMD triggers
			if (!dark_patterns_between){
				if (ii==(dmd_trig2_ttl-1) || ii==(dmd_trig1_ttl-1)){
					ttlArray[counter+1][ii] = 0;
				}
			}
			
			// don't change DAC, otherwise e.g. voice coil mirror is flipping back and forth rapidly.
			dacArray[counter+1][ii] = dacArrayChannel[ic][ii];
		}
		counter = counter + 2;	
	}
}

// add extra timestep to turn off lasers in time lapse mode
if (interval_time_lapse_flag){
	for (int ii=0; ii < 16; ii++){
		// set TTL's to zero, except for DMD enable trigger
		if (ii == (dmd_trig2_ttl - 1)){
			ttlArray[counter][ii] = 1;
		}
		else {ttlArray[counter][ii] = 0;}

		// keep DAC at previous value
		dacArray[counter][ii] = dacArray[counter - 1][ii];
	}
}

// print TTL and DAC triggerscope buffers
if(print_program){printBuffers(ttlArray, dacArray, n_tscope_steps);}

// load Triggerscope ADC and TTL ouput data
print(String.format("Programming Triggerscope with %d lines", new Object [] {n_tscope_steps}));
tout = "";
String dout = "";
for(int d = 0; d < n_tscope_steps; d++) { //load all TTL lines
	for(int t = 0; t < 16; t++) { //print all 16 outputs
		tout = "PROG_TTL," + (d+1) + "," + (t+1) + "," + ttlArray[d][t];
		if(!tgsWrite(tout, false, false, 1)){print("Transmit Error...)"); }		 
	}	
	for(int t = 0;t < 16; t++) { //load all DAC lines
		dout = dout + dacArray[d][t] + ","; 
		dout = "PROG_DAC," + (d+1) + "," + (t+1) + "," + dacArray[d][t];
		if(!tgsWrite(dout, false, false, 1)){print("Transmit Error...)"); }	 
	}	
}

/*****************************
Set focus loop for triggerscope
complicated because we have to consider many units: um, volts, ADC, and triggerscope 0-1000 focus units
*****************************/

// DAC info
int dac_bit_depth = 16;
double dac_min_voltage = 0.;
double dac_max_voltage = 10.;

//  focus loop data
double zstart_um = 0;
double zstop_um = 0;
double zstep_um = 0;
double zrange_um = 0;
// data to send to triggerscope
int [] focus_array = new int[]{0, 0, nz_pos, 0, tscope_channel_fastest_axis};
if (nz_pos > 1){

	// grab z-position from MDA window, in triggerscope focus units (0-1000)
	double zstart_tscope = acqSettings.slices.get(0);
	double zstop_tscope = acqSettings.slices.get(nz_pos - 1);
	double zstep_tscope = acqSettings.slices.get(1) - acqSettings.slices.get(0);
	double zrange_tscope = zstop_tscope - zstart_tscope;

	if(acqSettings.relativeZSlice){
		print("using relative z-position");
		zstart_tscope += z_initial_tscope;
		zstop_tscope += z_initial_tscope;
	}

	// convert from triggerscope focus units to voltage
	double zstart_voltage = map_intervals(zstart_tscope, 0., 1000., dac_min_voltage, dac_max_voltage - dac_min_voltage);
	double zstop_voltage = map_intervals(zstop_tscope, 0., 1000., dac_min_voltage, dac_max_voltage - dac_min_voltage);
	double zstep_voltage = map_intervals(zstart_tscope + zstep_tscope, 0., 1000., dac_min_voltage, dac_max_voltage - dac_min_voltage) - zstart_voltage;
	double zrange_voltage = zstop_voltage - zstart_voltage;

	// convert from voltage to DAC counts
	int dac_start = voltage2dac(dac_bit_depth, zstart_voltage, dac_min_voltage, dac_max_voltage - dac_min_voltage);
	int dac_step = voltage2dac(dac_bit_depth, zstep_voltage, 0, dac_max_voltage - dac_min_voltage);

	// set direction flag
	int zDirDAC = 1;
	if (dac_step < 0){
		dac_step = -dac_step;
		zDirDAC = 0;
	}
	
	focus_array[0] = dac_start;
	focus_array[1] = dac_step;
	focus_array[3] = zDirDAC;

	// get real z-positions by moving the z-stage and querying the positiom
	print("Moving z-stage to calibrate z-stack step size");
	mmc.setPosition(focus_dev, zstop_tscope);
	mmc.sleep(100);
	zstop_um = mmc.getPosition(zStage);
	
	mmc.setPosition(focus_dev, zstart_tscope);
	mmc.sleep(100);
	zstart_um = mmc.getPosition(zStage);
	zrange_um = zstop_um - zstart_um;
	zstep_um = zrange_um / (float) (nz_pos - 1);
	
	// print information about z-scan
	print(String.format("zstart = %.0f tscope focus = %.3fum = %.3fV = %d counts", new Object[] {zstart_tscope, zstart_um, zstart_voltage, focus_array[0]}));
	print(String.format("zstop  = %.0f tscope focus = %.3fum = %.3fV = %d counts", new Object[] {zstop_tscope, zstop_um, zstop_voltage, focus_array[0] + focus_array[1] * (nz_pos - 1)}));
	print(String.format("zstep  = %.0f tscope focus = %.3fum = %.3fV = %d counts", new Object[] {zstep_tscope, zstep_um, zstep_voltage, focus_array[1]})); 
}
else{
	// use initial value and no loop
	double focus_start_position_volts = map_intervals(z_initial_tscope, 0., 1000., dac_min_voltage, dac_max_voltage - dac_min_voltage);
	focus_array[0] = voltage2dac(dac_bit_depth, focus_start_position_volts, dac_min_voltage, dac_max_voltage - dac_min_voltage);
	focus_array[1] = 0;
	focus_array[3] = 1;
}

// set triggerscope focus
tout = "PROG_FOCUS," + focus_array[0] + "," + focus_array[1] + "," + focus_array[2] + "," + focus_array[3] + "," + focus_array[4];
if(!tgsWrite(tout, true, true, 1)){print("Transmit Error...)"); }
//} // end for program tscope loop

/*****************************
ARM triggerscope and do multi-dimensional acquisition
*****************************/
long time_start = System.currentTimeMillis();
long time_previous = time_start;

for (int ixy=0; ixy < nxy_pos; ++ixy) {
	// arm triggerscope before each move
	tgsWrite("ARM", true, true, 1);
	
	// Get new XY position
	double xNow = 0.0;
	double yNow = 0.0;
	if (!ignore_xy_loop) {

		//Move to new XY position
		position = positionList.getPosition(ixy);
		MultiStagePosition.goToPosition(position, mm.core());
		
		//Wait for XY stage. Our XY stage is much slower than Z stage, so waiting for it 
		//to finish the move is reasonable.
		mm.core().waitForDevice(xyStage);
		
		// Pull current xy-position
		xNow = position.getX();
		yNow = position.getY();
	}

	/*****************************
	burst acquisition of time/z-positions/channel/SIM images, or if a finite time interval between images is desired z-positions/channel/SIM images
	*****************************/
	if (!interval_time_lapse_flag){mmc.startSequenceAcquisition(n_times * nz_pos * nchannels * n_patterns, 0, true);}
	
	long time_iteration_start = System.currentTimeMillis();
	long time_previous_iteration_start = time_iteration_start;
	
	for (int ti; ti < n_times; ti++){	
		
		if(interval_time_lapse_flag){
			if(ti > 0){
				time_previous_iteration_start = time_iteration_start;
				long time_to_sleep = intervalMs - (System.currentTimeMillis() - time_previous_iteration_start);
				//print(String.format("time to sleep = %dms", new Object [] {time_to_sleep}));
				if (time_to_sleep < 0){time_to_sleep = 0;}
				
				mmc.sleep(time_to_sleep);
			}
			
			time_iteration_start = System.currentTimeMillis();
			if (ti == 0){
				time_previous_iteration_start = time_iteration_start;
			}
			mmc.startSequenceAcquisition(nz_pos * nchannels * n_patterns, 0, true);
		}
		
		
		// NOTE: during burst acqusition cannot change any settings NOT controlled by triggerscope
		// process images as they arrive and add metadata
		for (int iz=0; iz < nz_pos; ++iz){
			// calculate current z-position
			double zNow = 0.0;
			if (nz_pos > 1) {zNow = zstart_um + (float) iz * zstep_um;}	
					
			int iall = 0; // unique counter for channel/sim combination
			for (int ichannel=0; ichannel < nchannels; ++ichannel){
				for(int isim=0; isim < n_patterns; ++isim){
										
					// wait until an image is available, then pop the image off the stack
					while(mmc.getRemainingImageCount() == 0){;}
					TaggedImage img_tagged = mmc.popNextTaggedImage();
					Image image = mm.data().convertTaggedImage(img_tagged);
					
					// create custom metadata object to store sim image index, channel index, and triggerscope settings
					PropertyMapBuilder pmb = mm.data().getPropertyMapBuilder().putInt("SimIndex", isim).putInt("ChannelIndex", ichannel);
					for (int ii=0; ii<16; ii++){
						if (ii != focus_dac_index){
							pmb.putInt(String.format("TriggerScope-DAC%02d-Counts", new Object [] {ii + 1}), dacArrayChannel[ichannel][ii]);
							pmb.putDouble(String.format("TriggerScope-DAC%02d-Volts", new Object [] {ii + 1}), dac2voltage(dac_bit_depth, dacArrayChannel[ichannel][ii], dac_min_voltage, dac_max_voltage));
						}
						pmb.putInt(String.format("TriggerScope-TTL%02d", new Object [] {ii + 1}), ttlArrayChannel[ichannel][ii]);
					}
					PropertyMap pm = pmb.build();
					
					// get current image metadata and update with custom data created above
					Metadata imgMd = image.getMetadata();
					
					// if using multiple burst acquisitions, then must correct elapsed time
					double elapsedTimeMs = imgMd.getElapsedTimeMs();
					if (interval_time_lapse_flag){elapsedTimeMs += time_iteration_start - time_previous_iteration_start;}
					
					md = imgMd.copy().positionName("Pos-"+ixy).xPositionUm(xNow).yPositionUm(yNow).zPositionUm(zNow).exposureMs(exposureMs).elapsedTimeMs(elapsedTimeMs).userData(pm).build();
							
					// coordinates for image. They must be unique for different images, so we use iall instead of ichannel
					// i.e. "channel" entry is unique for each combination of real channel and sim pattern
					Coords.CoordsBuilder coord_builder = mm.data().getCoordsBuilder().stagePosition(ixy).z(iz).channel(iall).time(ti);
					Coords coords = coord_builder.build();
					
					// place image with updated metadata into dataStore
					store.putImage(image.copyWith(coords, md));	
	
					++iall; // increment counter
				}
			}

			// print elapsed time at least every 2s
			long time_now = System.currentTimeMillis();
			if ( (time_now - time_previous) > 2000L){
				long time_elapsed_ms = time_now - time_start;
				int seconds = (int) ((time_elapsed_ms / 1000) % 60);
				int minutes = (int) ((time_elapsed_ms / (1000*60)) % 60);
				int hours   = (int) ((time_elapsed_ms / (1000*60*60)) % 24);
				print(String.format("%d/%d xy-pos = (%.3fum, %.3fum), %d/%d times, %d/%d z-pos = %.3fum; elapsed time = %02d:%02d:%02d", new Object [] {ixy+1, nxy_pos, xNow, yNow, ti+1, n_times, iz+1, nz_pos, zNow, hours, minutes, seconds}));
				time_previous = time_now;
			}
		}
	}
	mmc.stopSequenceAcquisition();
}

// This saves one tif for each x-y position. Probably desired behavior here, but why is that enforced?
// Only need one of these if using ram datastore
//store.save(Datastore.SaveMode.MULTIPAGE_TIFF, savePath);
//store.save(Datastore.SaveMode.SINGLEPLANE_TIFF_SERIES , savePath);

//Finish writing data to disk and properly close datastore
// required for tif datastores
store.freeze();
// todo: want to check if window is still open, and wait to close until display is closed
store.close();	

// set triggerscope lines back to initial positions 
mmc.sleep(1000); // todo: why is this here? is it necessary?
print("Returning TriggerScope TTL/DAC lines to initial settings");
mmc.setPosition(focus_dev, z_initial_tscope);
for (int ii=0; ii<16; ii++){
	if( ii != focus_dac_index){
		mmc.setProperty(String.format("TriggerScope-DAC%02d", new Object[] {ii+1}), "Volts", dac_start[ii]);
	};
	mmc.setProperty(String.format("TriggerScope-TTL%02d", new Object[] {ii+1}), "State", 0);
	mmc.setProperty(String.format("TriggerScope-TTL%02d", new Object[] {ii+1}), "State", ttl_start[ii]);
}

print("Finished");
