# Generated by Configurator on Wed Jul 31 11:59:02 MST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,Blackfly S BFS-U3-200S6M,SpinnakerCamera,Blackfly S BFS-U3-200S6M

# Pre-init settings for devices
Property,Blackfly S BFS-U3-200S6M,Serial Number,17513908

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Blackfly S BFS-U3-200S6M
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

