# Generated by Configurator on Wed Dec 08 17:59:14 MST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,MicroDrive XY Stage,MCL_MicroDrive,MicroDrive XY Stage
Device,MCL NanoDrive Z Stage,MCL_NanoDrive,MCL NanoDrive Z Stage
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM

# Pre-init settings for devices
Property,MicroDrive XY Stage,EncodersPresent,Yes

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,MCL NanoDrive Z Stage,1

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,
Property,Core,Focus,MCL NanoDrive Z Stage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels


# Configuration presets
# Group: System
# Preset: Startup
ConfigGroup,System,Startup,HamamatsuHam_DCAM,DEFECT CORRECT MODE,OFF
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],EXPOSURE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],EXPOSURE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],EXPOSURE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],NEGATIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],POSITIVE
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],READOUT END
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[1],READOUT END
ConfigGroup,System,Startup,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[2],READOUT END
ConfigGroup,System,Startup,HamamatsuHam_DCAM,ScanMode,1
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL

# Preset: Shutdown
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,DEFECT CORRECT MODE,ON
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[0],TRIGGER READY
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[1],TRIGGER READY
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER KIND[2],TRIGGER READY
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[0],NEGATIVE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[1],NEGATIVE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER POLARITY[2],NEGATIVE
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[0],READOUT END
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[1],READOUT END
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,OUTPUT TRIGGER SOURCE[2],READOUT END
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,ScanMode,2
ConfigGroup,System,Shutdown,HamamatsuHam_DCAM,TRIGGER SOURCE,INTERNAL
