# Generated by Configurator on Thu Aug 18 11:58:31 MST 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,pvcam,PVCAM,Camera-1

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,pvcam
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: System
# Preset: Startup
#ConfigGroup,System,Startup,pvcam,PP  1   ENABLED,No
#ConfigGroup,System,Startup,pvcam,PP  2   ENABLED,No
#ConfigGroup,System,Startup,pvcam,PP  3   ENABLED,No
#ConfigGroup,System,Startup,pvcam,PP  4   ENABLED,No
#ConfigGroup,System,Startup,pvcam,PP  5   ENABLED,No



# PixelSize settings

